PsychoPy2experiment version="2023.2.3"
#Set participant number randomly
# Open a full screen window
#choose monitor to calibrate monitor size
#define in what format participant data is saved
#first routine in the experiment displaying the consent form
#creating a text block for the consent form
#change text here for different consent form
# text block for consenting
#change this for different agreement text
#create a check box to mark for consenting
#create a mouse component to click on the consent box, things progress after klicking on this box
#if consent box is clicked proceed to next routine
#second routine displaying the instructions
# creating a text box to include the instruction text in
#change this for different instructions
#text box for instructions on how to proceed
#change this for different instructions on how to proceed
# create a keyboard component
#change this for key other than space as acceptable response to proceed
#third routine for introductory items
# routine for the 4 introductory items
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = trying_things_out
  keyboardBackend = ioHub
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Routines
  Routine consent_form
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    TextComponent consent
      letterHeight = 0.037
      pos = (0, 0.08)
      startVal [time (s)] = 0.5
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      text:
        Beleegyezési nyilatkozat:

        A kérdőív kitöltésével hozzájárulását fejezi ki egy a Massachusetts Institute of Technology Nyelvészet és Filozófia tanszékén folytatott, Athulya Aravind által vezetett, kutatásban való részvételéhez. Ha kérdése van a kutatással kapcsolatban, azokat az aaravind@mit.edu címre küldheti. A részvétele a kutatásban teljes mértékben önkéntes alapon történik. Ha valamelyik kérdésre nem kíván válaszolni azt nyugodtan kihagyhatja. A kérdőív kitöltését bármikor bármilyen negatív következmény nélkül megszakíthatja. Az anonimitása biztosított; a kutatókhoz, akik az Ön kutatásban való részévételét kérvényezték, Önről semmilyen személyes információ nem jut el.
    TextComponent consenting
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 0.5
      text = Elolvastam és tudomásul vettem a beleegyezési nyilatkozatot. Elmúltam 18 éves és az anyanyelvem magyar.
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    PolygonComponent box
      anchor = bottom-left
      fillColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      pos = (-0.5, -0.298)
      shape = rectangle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.5
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    MouseComponent click_consent
      clickable = box
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.5
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  Routine instructions
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    TextComponent instruction
      letterHeight = 0.037
      pos = (0, 0.1)
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_instr.keys == 'space'
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      text:
        A kérdőívben feltett kérdésekre nincsen helyes válasz. Minden kérdésnél kérjük azt a választ jelölje meg amelyik Ön szerint jobban, természetesebben hangzik. Kérjük, hogy a kérdőívben szereplő minden mondatot és válaszlehetőséget figyelmesen olvasson el.

        A kérdőív kitöltéséhez szükséges átlagos idő: 20 perc.

        Közreműködését előre is köszönöm!
    TextComponent next_instr
      color = 0.8824, 1.0000, 1.0000
      letterHeight = 0.032
      pos = (0, -0.3)
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_instr.keys == 'space'
      text = A továbblépéshez nyomja le a 'space' billentyűt!
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    KeyboardComponent key_resp_instr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_instr.keys == 'space'
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  Routine IntroEx
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    TextComponent IntroExSentence1
      letterHeight = 0.045
      pos = (0, 0.25)
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_intro.keys == 'space'
      text [set every repeat] = $wholeSentenceTrial
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    ImageComponent IntroExImage1
      image [set every repeat] = $Pic1Trial
      size = (0.35, 0.35)
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_intro.keys == 'space'
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    TextComponent Intro_continue
      color = 0.8824, 1.0000, 1.0000
      letterHeight = 0.032
      pos = (0, -0.4)
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_intro.keys == 'space'
      text = A továbblépéshez nyomja le a 'space' billentyűt!
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    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_intro.keys == 'space'
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    TextComponent IntroExSentence2
      letterHeight = 0.045
      pos = (0, 0.25)
      startVal [condition] = key_resp_intro.keys == 'space'
      text = Ezek _______
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    ImageComponent IntroExImage2
      image [set every repeat] = $Pic2Trial
      size = (0.35, 0.35)
      startVal [condition] = key_resp_intro.keys == 'space'
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    PolygonComponent IntroButton1
      anchor = bottom-left
      fillColor = 0.7412, 0.4431, 0.0588
      lineWidth = 5
      pos = (-0.5, -0.4)
      shape = rectangle
      size = (0.35, 0.1)
      startVal [condition] = key_resp_intro.keys == 'space'
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    TextComponent IntroButton1Text
      letterHeight = 0.04
      pos = (-0.33, -0.345)
      startVal [condition] = key_resp_intro.keys == 'space'
      text [set every repeat] = $pl1Trial
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    MouseComponent IntroButton1Mouse
      clickable = IntroButton1
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [condition] = key_resp_intro.keys == 'space'
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    PolygonComponent IntroButton2
      anchor = bottom-right
      fillColor = 0.7412, 0.4431, 0.0588
      lineWidth = 5
      pos = (0.5, -0.4)
      shape = rectangle
      size = (0.35, 0.1)
      startVal [condition] = key_resp_intro.keys == 'space'
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    TextComponent IntroButton2Text
      letterHeight = 0.04
      pos = (0.33, -0.345)
      startVal [condition] = key_resp_intro.keys == 'space'
      text [set every repeat] = $pl2Trial
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    MouseComponent IntroButton2Mouse
      clickable = IntroButton2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [condition] = key_resp_intro.keys == 'space'
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  Routine Targets
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    TextComponent TargetSentence1
      letterHeight = 0.045
      pos = (0, 0.25)
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_target.keys == 'space'
      text [set every repeat] = $wholeSentence
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    ImageComponent TargetsImage1
      image [set every repeat] = $Pic1
      size = (0.35, 0.35)
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_target.keys == 'space'
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    TextComponent target_continue
      color = 0.8824, 1.0000, 1.0000
      letterHeight = 0.032
      pos = (0, -0.4)
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_target.keys == 'space'
      text = A továbblépéshez nyomja le a 'space' billentyűt!
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    KeyboardComponent key_resp_target
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_target.keys == 'space'
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    TextComponent TargetsSentence2
      letterHeight = 0.045
      pos = (0, 0.25)
      startVal [condition] = key_resp_target.keys == 'space'
      text = Ezek _______
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    ImageComponent TargetsImage2
      image [set every repeat] = $Pic2
      size = (0.35, 0.35)
      startVal [condition] = key_resp_target.keys == 'space'
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    PolygonComponent TargetButton1
      anchor = bottom-left
      fillColor = 0.7412, 0.4431, 0.0588
      lineWidth = 5
      pos = (-0.5, -0.4)
      shape = rectangle
      size = (0.35, 0.1)
      startVal [condition] = key_resp_target.keys == 'space'
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    TextComponent TargetButton1Text
      letterHeight = 0.04
      pos = (-0.33, -0.345)
      startVal [condition] = key_resp_target.keys == 'space'
      text [set every repeat] = $pl1
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    MouseComponent TargetButton1Mouse
      clickable = TargetButton1
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [condition] = key_resp_target.keys == 'space'
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    PolygonComponent TargetButton2
      anchor = bottom-right
      fillColor = 0.7412, 0.4431, 0.0588
      lineWidth = 5
      pos = (0.5, -0.4)
      shape = rectangle
      size = (0.35, 0.1)
      startVal [condition] = key_resp_target.keys == 'space'
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    TextComponent TargetButton2Text
      letterHeight = 0.04
      pos = (0.33, -0.345)
      startVal [condition] = key_resp_target.keys == 'space'
      text [set every repeat] = $pl2
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    MouseComponent TargetButton2Mouse
      clickable = TargetButton2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [condition] = key_resp_target.keys == 'space'
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  Routine Fillers
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    TextComponent FillerExSentence1
      letterHeight = 0.045
      pos = (0, 0.25)
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_filler.keys == 'space'
      text [set every repeat] = $wholeSentenceFiller
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    ImageComponent FillerImage1
      image [set every repeat] = $Pic1Filler
      size = (0.35, 0.35)
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_filler.keys == 'space'
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    TextComponent Filler_continue
      color = 0.8824, 1.0000, 1.0000
      letterHeight = 0.032
      pos = (0, -0.4)
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_filler.keys == 'space'
      text = A továbblépéshez nyomja le a 'space' billentyűt!
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    KeyboardComponent key_resp_filler
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [condition] = key_resp_filler.keys == 'space'
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    TextComponent FillerExSentence2
      letterHeight = 0.045
      pos = (0, 0.25)
      startVal [condition] = key_resp_filler.keys == 'space'
      text = Ezek _______
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    ImageComponent FillerExImage2
      image [set every repeat] = $Pic2Filler
      size = (0.35, 0.35)
      startVal [condition] = key_resp_filler.keys == 'space'
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    PolygonComponent FillerButton1
      anchor = bottom-left
      fillColor = 0.7412, 0.4431, 0.0588
      lineWidth = 5
      pos = (-0.5, -0.4)
      shape = rectangle
      size = (0.35, 0.1)
      startVal [condition] = key_resp_filler.keys == 'space'
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    TextComponent FillerButton1Text
      letterHeight = 0.04
      pos = (-0.33, -0.345)
      startVal [condition] = key_resp_filler.keys == 'space'
      text [set every repeat] = $pl1Filler
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    MouseComponent FillerButton1Mouse
      clickable = FillerButton1
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [condition] = key_resp_filler.keys == 'space'
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    PolygonComponent FillerButton2
      anchor = bottom-right
      fillColor = 0.7412, 0.4431, 0.0588
      lineWidth = 5
      pos = (0.5, -0.4)
      shape = rectangle
      size = (0.35, 0.1)
      startVal [condition] = key_resp_filler.keys == 'space'
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    TextComponent FillerButton2Text
      letterHeight = 0.04
      pos = (0.33, -0.345)
      startVal [condition] = key_resp_filler.keys == 'space'
      text [set every repeat] = $pl2Filler
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    MouseComponent FillerButton2Mouse
      clickable = FillerButton2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [condition] = key_resp_filler.keys == 'space'
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  Routine thanks
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    TextComponent thankyou
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      text = Köszönöm a részvételét!
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    KeyboardComponent key_resp_thanks
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent thankyou_continue
      color = 0.8824, 1.0000, 1.0000
      letterHeight = 0.035
      pos = (0, -0.38)
      startVal [time (s)] = 0.5
      text = A kérdőív befejezéséhez nyomja le a 'space' billentyűt!
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Flow
  Routine consent_form
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trial_data.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'wordTrial': 'szobor', 'typeTrial': 'practice', 'pl1Trial': 'szobrok', 'pl2Trial': 'szoborok', 'wholeSentenceTrial': 'Ez egy szobor.', 'Pic1Trial': '8.jpg', 'Pic2Trial': '8_pl.png'},
      {'wordTrial': 'mötök', 'typeTrial': 'practice', 'pl1Trial': 'mötkök', 'pl2Trial': 'mötökök', 'wholeSentenceTrial': 'Ez egy mötök.', 'Pic1Trial': '16.jpg', 'Pic2Trial': '16_pl.png'},
      {'wordTrial': 'vecsek', 'typeTrial': 'practice', 'pl1Trial': 'vecskek', 'pl2Trial': 'vecsekek', 'wholeSentenceTrial': 'Ez egy vecsek.', 'Pic1Trial': '11.jpg', 'Pic2Trial': '11_pl.png'},
      {'wordTrial': 'féreg', 'typeTrial': 'practice', 'pl1Trial': 'férgek', 'pl2Trial': 'féregek', 'wholeSentenceTrial': 'Ez egy féreg. ', 'Pic1Trial': '24.jpg', 'Pic2Trial': '24_pl.png'}]
    Routine IntroEx
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = exp_test_1.xlsx
    loopType = random
    nReps = 6
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    conditions:
      [{'word': 'möböb', 'type': 'geminate', 'pl1': 'möböbök', 'pl2': 'möbbök', 'wholeSentence': 'Ez egy möböb.', 'Homorg': 'yes', 'Pic1': '19.jpg', 'Pic2': '19_pl.png'},
      {'word': 'göszösz', 'type': 'geminate', 'pl1': 'göszöszök', 'pl2': 'gösszök', 'wholeSentence': 'Ez egy göszösz.', 'Homorg': 'yes', 'Pic1': '35_1.png', 'Pic2': '35_pl.png'},
      {'word': 'dotyoty', 'type': 'geminate', 'pl1': 'dotyotyok', 'pl2': 'dottyok', 'wholeSentence': 'Ez egy dotyoty.', 'Homorg': 'yes', 'Pic1': '6.jpg', 'Pic2': '6_pl.png'},
      {'word': 'sonon', 'type': 'geminate', 'pl1': 'sononok', 'pl2': 'sonnok', 'wholeSentence': 'Ez egy sonon.', 'Homorg': 'yes', 'Pic1': '28.jpg', 'Pic2': '28_pl.png'},
      {'word': 'ferer', 'type': 'geminate', 'pl1': 'fererek', 'pl2': 'ferrek', 'wholeSentence': 'Ez egy ferer.', 'Homorg': 'yes', 'Pic1': '4.jpg', 'Pic2': '4_pl.png'},
      {'word': 'vekek', 'type': 'geminate', 'pl1': 'vekekek', 'pl2': 'vekkek', 'wholeSentence': 'Ez egy vekek. ', 'Homorg': 'yes', 'Pic1': '9.jpg', 'Pic2': '9_pl.png'},
      {'word': 'csefec', 'type': 'labfric', 'pl1': 'csefecek', 'pl2': 'csefcek', 'wholeSentence': 'Ez egy csefec.', 'Homorg': 'no', 'Pic1': '23.jpg', 'Pic2': '23_pl.png'},
      {'word': 'gyovon', 'type': 'labfric', 'pl1': 'gyovonok', 'pl2': 'gyovnok', 'wholeSentence': 'Ez egy gyovon. ', 'Homorg': 'no', 'Pic1': '26.jpg', 'Pic2': '26_pl.png'},
      {'word': 'zsofot', 'type': 'labfric', 'pl1': 'zsofotok', 'pl2': 'zsoftok', 'wholeSentence': 'Ez egy zsofot.', 'Homorg': 'no', 'Pic1': '31_1.png', 'Pic2': '31_pl.png'}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
    Routine Targets
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = Fillers.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'wordFiller': 'csum', 'typeFiller': 'filler', 'pl1Filler': 'csumok', 'pl2Filler': 'csumek', 'wholeSentenceFiller': 'Ez egy csum.', 'Pic1Filler': '46_1.png', 'Pic2Filler': '46_pl.png'},
        {'wordFiller': 'mib', 'typeFiller': 'filler', 'pl1Filler': 'mibok', 'pl2Filler': 'mibek', 'wholeSentenceFiller': 'Ez egy mib. ', 'Pic1Filler': '15.jpg', 'Pic2Filler': '15_pl.png'},
        {'wordFiller': 'caz', 'typeFiller': 'filler', 'pl1Filler': 'cazok', 'pl2Filler': 'cazek', 'wholeSentenceFiller': 'Ez egy caz.', 'Pic1Filler': '51_1.png', 'Pic2Filler': '51_pl.png'},
        {'wordFiller': 'gyav', 'typeFiller': 'filler', 'pl1Filler': 'gyavok', 'pl2Filler': 'gyavek', 'wholeSentenceFiller': 'Ez egy gyav.', 'Pic1Filler': '10.jpg', 'Pic2Filler': '10_pl.png'},
        {'wordFiller': 'züty', 'typeFiller': 'filler', 'pl1Filler': 'zütyok', 'pl2Filler': 'zütyök', 'wholeSentenceFiller': 'Ez egy züty.', 'Pic1Filler': '20.jpg', 'Pic2Filler': '20_pl.png'},
        {'wordFiller': 'düzs', 'typeFiller': 'filler', 'pl1Filler': 'düzsok', 'pl2Filler': 'düzsök', 'wholeSentenceFiller': 'Ez egy düzs.', 'Pic1Filler': '3.jpg', 'Pic2Filler': '3_pl.png'},
        {'wordFiller': None, 'typeFiller': None, 'pl1Filler': None, 'pl2Filler': None, 'wholeSentenceFiller': None, 'Pic1Filler': None, 'Pic2Filler': None},
        {'wordFiller': None, 'typeFiller': None, 'pl1Filler': None, 'pl2Filler': None, 'wholeSentenceFiller': None, 'Pic1Filler': None, 'Pic2Filler': None}]
      Routine Fillers
    LoopTerminator trials_3
  LoopTerminator trials_2
  Routine thanks
